begintemplate SpinyCell
    public spine_neck, spine_head
    create spine_neck, spine_head

    proc init() {
        // Configure spine neck
        spine_neck {
            nseg = 1
            L = 0.05 + 0.15 * random()  // 0.05–0.2 μm
            diam = 0.15 + 0.1 * random() // 0.15–0.25 μm
            insert pas
            cm = 1.0
            Ra = 150
            g_pas = get_g_pas(L, diam)
            e_pas = -65
            pt3dclear()
            pt3dadd(0, 0, 0, diam)
            pt3dadd(0, L, 0, diam)
        }

        // Configure spine head
        spine_head {
            nseg = 1
            L = 0.4 + 0.3 * random()   // 0.4–0.7 μm
            diam = 0.35 + 0.3 * random() // 0.35–0.65 μm
            insert pas
            cm = 1.0
            Ra = 100
            g_pas = get_g_pas(L, diam)
            e_pas = -65
            pt3dclear()
            pt3dadd(0, 0, 0, diam)
            pt3dadd(0, L, 0, diam)
        }

        // Only connect spine_head to neck
        connect spine_head(0), spine_neck(1)
    }

    // Function to calculate g_pas as a function of geometry
    func get_g_pas() { local L, diam, g_pas_val
        L = $1  // μm
        diam = $2  // μm
        // Example: decrease g_pas for longer/thinner compartments
        // (scale constants as needed for your biophysics)
        // Convert μm to cm: 1 μm = 1e-4 cm
        L = L * 1e-4
        diam = diam * 1e-4
        g_pas_val = 0.0005 * (0.5 / (L * diam + 1e-9))  // Example: inversely scale with surface area
        return g_pas_val
    }
endtemplate SpinyCell
